# # try the 4-interval regular condition first
# int this_interval_cond = 2;


# array<int> this_index_of_whole_block[] = getBlockStimList(2,this_interval_cond);
# array <int> stimList[][] = assignDeviant(this_interval_cond, this_index_of_whole_block);
# term.print_line(stimList[1]);
# term.print_line(stimList[2]);

# array<int> a[] = {2,2,3,4};
# array<int> b[] = {2,2,3,4};
# bool test;
# test = a == b;
# term.print_line(test);

# array<int> a[] = {2,2,3,4};
# a = {9,9,9,9,};

# term.print_line(a);
#runBlock(1,1,16,99);

# just use the subject ID input in the prompt as counterbalancing ID
int counterbalanceID = int(logfile.subject());
if (logfile.subject()=="") then # if nothing in logfile.subject(), it means that this is a test from the editor. 
	counterbalanceID = 5; # put whatever ID you like
end;

if (counterbalanceID > cbtable_deviant_order.count()) then
	presentGeneralInstruct("The subject ID you input is not found. Press ESC to quit and restart.");
end;

runExperiment(counterbalanceID);
